PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data file delimiter = semicolon
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine Instrucciones
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    TextComponent Texto_instrucciones
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        [Instrucciones del experimento]

        Cuando esté preparado pulse 'espacio'
  Routine trial
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.2
      text [set every repeat] = $word
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    KeyboardComponent teclado
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine Agradecimientos
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    TextComponent text_agradecimiento
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Gracias por participar en el experimento
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Flow
  Routine Instrucciones
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = verbos.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'type': 'pasado', 'word': 'Escribías', 'correct_key': 'left'},
      {'type': 'pasado', 'word': 'Leías', 'correct_key': 'left'},
      {'type': 'pasado', 'word': 'Hablabas', 'correct_key': 'left'},
      {'type': 'pasado', 'word': 'Caminabas', 'correct_key': 'left'},
      {'type': 'pasado', 'word': 'Saltabas', 'correct_key': 'left'},
      {'type': 'pasado', 'word': 'Nadabas', 'correct_key': 'left'},
      {'type': 'pasado', 'word': 'Corrías', 'correct_key': 'left'},
      {'type': 'pasado', 'word': 'Bailabas', 'correct_key': 'left'},
      {'type': 'pasado', 'word': 'Jugabas', 'correct_key': 'left'},
      {'type': 'pasado', 'word': 'Comías', 'correct_key': 'left'},
      {'type': 'pasado', 'word': 'Dormías', 'correct_key': 'left'},
      {'type': 'pasado', 'word': 'Estudiabas', 'correct_key': 'left'},
      {'type': 'pasado', 'word': 'Trabajabas', 'correct_key': 'left'},
      {'type': 'pasado', 'word': 'Cantabas', 'correct_key': 'left'},
      {'type': 'pasado', 'word': 'Bebías', 'correct_key': 'left'},
      {'type': 'pasado', 'word': 'Conducías', 'correct_key': 'left'},
      {'type': 'pasado', 'word': 'Pintabas', 'correct_key': 'left'},
      {'type': 'pasado', 'word': 'Saltabas', 'correct_key': 'left'},
      {'type': 'pasado', 'word': 'Mirabas', 'correct_key': 'left'},
      {'type': 'pasado', 'word': 'Escuchabas', 'correct_key': 'left'},
      {'type': 'pasado', 'word': 'Saltabas', 'correct_key': 'left'},
      {'type': 'pasado', 'word': 'Creabas', 'correct_key': 'left'},
      {'type': 'pasado', 'word': 'Viajabas', 'correct_key': 'left'},
      {'type': 'pasado', 'word': 'Ayudabas', 'correct_key': 'left'}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
    Routine trial
  LoopTerminator trials
  Routine Agradecimientos
